OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x079d1f09 = 20.02.2022
0x790d75b8 = Yarik Kudryavtsev
0x8c1fc55b = 2.0
0x9f5c4075 = BrainSound
0xf6b2e3fa = Music
0xf8034a49 = lowtaco
Comment
  DEMO MODE
  You can attach all the lines from the Acquisition client
  to the Generic stream reader,
  and double-click to select the BrainSound Demo Rec file
  that you should have downloaded from Github.
Comment
  Channel Selector
  Select the required frequency from the neural interface.
  Electrode - All frequencies, spectrum.
Comment
  Temporal Filter
  We filter the frequency by time to remove unnecessary noise.
Comment
   Simple DSP
  We bring huge data values to the desired values
  by dividing x by a certain number, different for all frequencies.
Comment
  Signal Display
  Display Electrode.
Comment
   Hilbert Transform
  Removing negative values.
Comment
  The data obtained due to delays are square,
  but we need to bring them to a sine wave,
  so we average the values.
Comment
  OST Controllers
  Convert the received data into OSC information
  and broadcast it to the network.

  Default: 127.0.0.1:9001.

  If you want to process data on one PC and broadcast it to another,
  for example a laptop,
  you must change the address to your local laptop address, for example 192.168.1.16
Comment
  Crop
  We limit the signal to 0, 127
  because in midi the values are limited on these numbers.
Comment
   Attention and Meditation
  Essence technology from NeuroSky.
  ampling of several frequencies responsible for attention and meditation.
Comment
  Sgnal Merger
  We combine signals for joint display.
Comment
  Lowtaco BrainSound v2.0
  Built on the basis of NeuroSky TGAM.
  To use this script, it is best to use this particular neural interface.

  This scenario processes data from the EEG to Midi-understandable values,
  converts them to OSC.
  The execution of scenario is resource-intensive,
  since it is necessary to convert each wave to OSC separately.

  In version 3.0, the system will be optimized.
Comment
  We are making the final visualization.

Generic stream reader => #0
  Filename = C:/Users/ukuwi/Desktop/Lowtaco BrainSound/Lowtaco BrainSound Demo Rec
#0.Output Signal -> Channel Selector "Electrode"
  Channel List = Electrode
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 10
  Pass band ripple (dB) = 0.500000
Data=#2 -> Signal display "Electrode Clean"
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Output Signal -> Channel Selector "Attention"
  Channel List = Attention
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop => #8
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /attention
#0.Output Signal -> Channel Selector "Meditation"
  Channel List = Meditation
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop => #14
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /meditation
Input 1=#8, Input 2=#14 -> Signal Merger => #16
Data=#16 -> Signal display "Attention | Meditation"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 50
  Time Scale = 30
  Bottom ruler = true
  Left ruler = true
  Multiview = false
#0.Output Signal -> Channel Selector "Delta"
  Channel List = Delta
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/1300
-> Hilbert Transform => #21
#21.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #24
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /delta
#0.Output Signal -> Channel Selector "Theta"
  Channel List = Theta
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/500
-> Hilbert Transform => #29
#29.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #32
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /theta
Input 1=#24, Input 2=#32 -> Signal Merger => #34
#0.Output Signal -> Channel Selector "Low Alpha"
  Channel List = Low Alpha
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/150
-> Hilbert Transform => #38
#38.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #41
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /low-alpha
#0.Output Signal -> Channel Selector "High Alpha"
  Channel List = High Alpha
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/68
-> Hilbert Transform => #46
#46.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #49
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /high-alpha
Input 1=#41, Input 2=#49 -> Signal Merger => #51
Input 1=#34, Input 2=#51 -> Signal Merger => #52
#0.Output Signal -> Channel Selector "Low Beta"
  Channel List = Low Beta
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/35
-> Hilbert Transform => #56
#56.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #59
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /low-beta
#0.Output Signal -> Channel Selector "High Beta"
  Channel List = High Beta
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/20
-> Hilbert Transform => #64
#64.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #67
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /high-beta
Input 1=#59, Input 2=#67 -> Signal Merger => #69
#0.Output Signal -> Channel Selector "Low Gamma"
  Channel List = Low Gamma
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/10
-> Hilbert Transform => #73
#73.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #76
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /low-gamma
#0.Output Signal -> Channel Selector "Mid Gamma"
  Channel List = Mid Gamma
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/8
-> Hilbert Transform => #81
#81.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #84
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /mid-gamma
Input 1=#76, Input 2=#84 -> Signal Merger => #86
Input 1=#69, Input 2=#86 -> Signal Merger => #87
Input 1=#52, Input 2=#87 -> Signal Merger => #88
Matrix=#88 -> T/F Analysis
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 30
  Gain = 0.004
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#88 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 30
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#88 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
