OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x079d1f09 = 20.02.2022
0x60bc58ab = 08.03.2022
0x790d75b8 = Yarik Kudryavtsev
0x8c1fc55b = 2.5
0x9f5c4075 = BrainSound
0xf36a1567 = https://github.com/lowtaco/BrainSound
0xf6b2e3fa = Music
0xf8034a49 = lowtaco
Comment
  Acquisition Client
  Receives a signal from the server.
Comment
  Stream writer
  We write the received data to a file for further work with them.
Comment
  Channel Selector
  Select the required frequency from the neural interface.
  Electrode - All frequencies, spectrum.
Comment
  Temporal Filter
  We filter the frequency by time to remove unnecessary noise.
Comment
  Channel Rename
  Adding associations to the name of the channels.
Comment
  Signal Display
  Display Electrode.
Comment
   Simple DSP
  We bring huge data values to the desired values
  by dividing x by a certain number, different for all frequencies.
Comment
   Hilbert Transform
  Removing negative values.
Comment
  OSC Controllers
  Convert the received data into OSC information
  and broadcast it to the network.

  Default: 127.0.0.1:9001.

  If you want to process data on one PC and broadcast it to another,
  for example a laptop,
  you must change the address to your local laptop address, for example 192.168.1.16
Comment
  The data obtained due to delays are square,
  but we need to bring them to a sine wave,
  so we average the values.
Comment
  Crop
  We limit the signal to 0, 127
  because in midi the values are limited on these numbers.
Comment
   Attention and Meditation
  Essence technology from NeuroSky.
  ampling of several frequencies responsible for attention and meditation.
Comment
  Sgnal Merger
  We combine signals for joint display.
Comment
  Lowtaco BrainSound v2.5
  Built on the basis of NeuroSky TGAM.
  To use this script, it is best to use this particular neural interface.

  This scenario processes data from the EEG to Midi-understandable values,
  converts them to OSC.
  The execution of scenario is resource-intensive,
  since it is necessary to convert each wave to OSC separately.

  In version 3.0, the system will be optimized.
Comment
  We are making the final visualization.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input Signal=#0.Signal stream -> Generic stream writer
  Filename = C:/Users/ukuwi/Desktop/Lowtaco BrainSound/Records/Valera
  Use compression = false
#0.Signal stream -> Channel Selector "Electrode"
  Channel List = Electrode
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 10
  Pass band ripple (dB) = 0.500000
Data=#3 -> Signal display "Electrode Clean"
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Channel Selector "Attention"
  Channel List = Attention
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop => #9
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /attention
#0.Signal stream -> Channel Selector "Meditation"
  Channel List = Meditation
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop => #15
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /meditation
Input 1=#9, Input 2=#15 -> Signal Merger
-> Matrix Display "ESense"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.Signal stream -> Channel Selector "Delta"
  Channel List = Delta
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = Delta (waking)
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/1300
-> Hilbert Transform => #23
#23.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #26
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /delta
#0.Signal stream -> Channel Selector "Theta"
  Channel List = Theta
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = Theta (Diving)
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/1200
-> Hilbert Transform => #32
#32.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #35
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /theta
Input 1=#26, Input 2=#35 -> Signal Merger => #37
#0.Signal stream -> Channel Selector "Low Alpha"
  Channel List = Low Alpha
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = Low Alpha (Relax)
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/300
-> Hilbert Transform => #42
#42.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #45
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /low-alpha
#0.Signal stream -> Channel Selector "High Alpha"
  Channel List = High Alpha
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = High Alpha (Focus)
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/208
-> Hilbert Transform => #51
#51.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #54
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /high-alpha
Input 1=#45, Input 2=#54 -> Signal Merger => #56
Input 1=#37, Input 2=#56 -> Signal Merger => #57
#0.Signal stream -> Channel Selector "Low Beta"
  Channel List = Low Beta
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = Low Beta (Mind)
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/145
-> Hilbert Transform => #62
#62.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #65
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /low-beta
#0.Signal stream -> Channel Selector "High Beta"
  Channel List = High Beta
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = High Beta (Excite)
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/200
-> Hilbert Transform => #71
#71.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #74
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /high-beta
Input 1=#65, Input 2=#74 -> Signal Merger => #76
#0.Signal stream -> Channel Selector "Low Gamma"
  Channel List = Low Gamma
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = Low Gamma (Learn)
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/200
-> Hilbert Transform => #81
#81.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #84
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /low-gamma
#0.Signal stream -> Channel Selector "Mid Gamma"
  Channel List = Mid Gamma
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename
  New channel names = Mid Gamma (Cognitive)
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 4
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Compress DSP"
  Equation = x/20
-> Hilbert Transform => #90
#90.Envelope -> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 50
-> Crop => #93
  Crop method = Min/Max
  Min crop value = 0
  Max crop value = 127
-> OSC Controller
  OSC Server IP = 127.0.0.1
  OSC Server Port = 9001
  OSC Address = /mid-gamma
Input 1=#84, Input 2=#93 -> Signal Merger => #95
Input 1=#76, Input 2=#95 -> Signal Merger => #96
Input 1=#57, Input 2=#96 -> Signal Merger => #97
Matrix=#97 -> T/F Analysis
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 20
  Matrix Count = 30
  Gain = 0.0035
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#97 -> Signal display "Compressed Waves Graph"
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 30
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#97 -> Matrix Display "Compressed Waves"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
