OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Thibaut Monseigne
0x7a3a1558 = Add Temporal Filter (Butterworth Order 5)  and separate in two class before Train
0x84009d7c = Make typical process before train
0x8c1fc55b = 1.0
0x9f5c4075 = CSP Spatial Filter Trainer Metabox
0xf6b2e3fa = Signal processing/Filtering/
0xf8034a49 = Inria
Settings
  Low Cut Frequency = 5
  High Cut Frequency = 35
  Epoch Duration = 4
  Epoch Offset = 0.5
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
  Train Trigger = OVTK_StimulationId_Train
  Spatial Filter Configuration = ${Player_ScenarioDirectory}/scripts/csp-spatial-filter.xml
  Filter Dimension = 6
Input Input Signal -> #2
Input Input Stimulations -> #0
Output Train-completed Flag <- #5

Identity => #0
-> Identity => #1
Temporal Filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = $var{Low Cut Frequency}
  High cut frequency (Hz) = $var{High Cut Frequency}
  Pass band ripple (dB) = 1
Input signal=#2, Input stimulations=#0 -> Stimulation based epoching "Class 1" => #3
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation to epoch from = $var{Class 1}
Input signal=#2, Input stimulations=#0 -> Stimulation based epoching "Class 2" => #4
  Epoch duration (in sec) = $var{Epoch Duration}
  Epoch offset (in sec) = $var{Epoch Offset}
  Stimulation to epoch from = $var{Class 2}
Stimulations=#1, Signal condition 1=#3, Signal condition 2=#4 -> CSP Spatial Filter Trainer => #5
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = $var{Spatial Filter Configuration}
  Filter dimension = $var{Filter Dimension}
  Save as box config = true
