<OpenViBE-Scenario>
	<FormatVersion>2</FormatVersion>
	<Creator>OpenViBE Designer</Creator>
	<CreatorVersion>2.2.0</CreatorVersion>
	<Settings>
		<Setting>
			<Identifier>(0x00069d80, 0x160bdf2d)</Identifier>
			<TypeIdentifier>(0x79a9edeb, 0x245d83fc)</TypeIdentifier>
			<Name>Signals Path</Name>
			<DefaultValue>${Player_ScenarioDirectory}/signals</DefaultValue>
			<Value>${Player_ScenarioDirectory}/signals</Value>
		</Setting>
		<Setting>
			<Identifier>(0x002dd66e, 0x429f5d95)</Identifier>
			<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
			<Name>EEG File 1</Name>
			<DefaultValue>${Player_ScenarioDirectory}/File1.ov</DefaultValue>
			<Value>${Player_ScenarioDirectory}/File1.ov</Value>
		</Setting>
		<Setting>
			<Identifier>(0x007b6f73, 0x6bb30a11)</Identifier>
			<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
			<Name>EEG File 2</Name>
			<DefaultValue>${Player_ScenarioDirectory}/File2.ov</DefaultValue>
			<Value>${Player_ScenarioDirectory}/File2.ov</Value>
		</Setting>
		<Setting>
			<Identifier>(0x007c80c6, 0xd9f61cbd)</Identifier>
			<TypeIdentifier>(0x79a9edeb, 0x245d83fc)</TypeIdentifier>
			<Name>XP Name</Name>
			<DefaultValue>XP</DefaultValue>
			<Value>XP</Value>
		</Setting>
		<Setting>
			<Identifier>(0x0076cf2d, 0xfce0f3b9)</Identifier>
			<TypeIdentifier>(0x79a9edeb, 0x245d83fc)</TypeIdentifier>
			<Name>Subject ID</Name>
			<DefaultValue>C1</DefaultValue>
			<Value>C1</Value>
		</Setting>
		<Setting>
			<Identifier>(0x00737048, 0xa4e81409)</Identifier>
			<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
			<Name>Session</Name>
			<DefaultValue>1</DefaultValue>
			<Value>1</Value>
		</Setting>
		<Setting>
			<Identifier>(0x17e1da90, 0x931d45d2)</Identifier>
			<TypeIdentifier>(0x79a9edeb, 0x245d83fc)</TypeIdentifier>
			<Name>File Prefix</Name>
			<DefaultValue>$var{XP Name}_$var{Subject ID}_S$var{Session}</DefaultValue>
			<Value>$var{XP Name}_$var{Subject ID}_S$var{Session}</Value>
		</Setting>
	</Settings>
	<Inputs></Inputs>
	<Outputs></Outputs>
	<Boxes>
		<Box>
			<Identifier>(0x00000661, 0x0000493c)</Identifier>
			<Name>Stimulation Filter</Name>
			<AlgorithmClassIdentifier>(0x02f96101, 0x5e647cb8)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Modified Stimulations</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x09e59e57, 0x8d4a553a)</TypeIdentifier>
					<Name>Default action</Name>
					<DefaultValue>Reject</DefaultValue>
					<Value>Select</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Time range begin</Name>
					<DefaultValue>0</DefaultValue>
					<Value>0</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Time range end</Name>
					<DefaultValue>0</DefaultValue>
					<Value>0</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x09e59e57, 0x8d4a553a)</TypeIdentifier>
					<Name>Action to perform</Name>
					<DefaultValue>Select</DefaultValue>
					<Value>Reject</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation range begin</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_Train</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation range end</Name>
					<DefaultValue>OVTK_StimulationId_Label_0F</DefaultValue>
					<Value>OVTK_StimulationId_Train</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>-64</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>448</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x47859b3f, 0x1dfdf5cd)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x61d11811, 0x71e65362)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x000660a7)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>6</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00001881, 0x0000648e)</Identifier>
			<Name>Generic stream writer</Name>
			<AlgorithmClassIdentifier>(0x09c92218, 0x7c1216f8)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x403488e7, 0x565d70b6)</TypeIdentifier>
					<Name>Input stream 1</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input stream 2</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stream 3</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue></DefaultValue>
					<Value>$var{Signals Path}/$var{File Prefix}_acquisition_concatfile-[$core{date}-$core{time}].ov</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Use compression</Name>
					<DefaultValue>true</DefaultValue>
					<Value>false</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>96</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>384</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x89a08108, 0xc8d1fac1)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x004f9ed7)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00001fa8, 0x00006669)</Identifier>
			<Name>Signal Concatenation</Name>
			<AlgorithmClassIdentifier>(0x372f3a9d, 0x49e20cd2)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input signal 1</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stimulations 1</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input signal 2</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stimulations 2</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Signal</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Status</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Time out before assuming end-of-file (in sec)</Name>
					<DefaultValue>5</DefaultValue>
					<Value>5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>End-of-file stimulation for input 1</Name>
					<DefaultValue>OVTK_StimulationId_ExperimentStop</DefaultValue>
					<Value>OVTK_StimulationId_ExperimentStop</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>End-of-file stimulation for input 2</Name>
					<DefaultValue>OVTK_StimulationId_ExperimentStop</DefaultValue>
					<Value>OVTK_StimulationId_ExperimentStop</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>32</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>448</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x2071186d, 0x08fedd4a)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x000eec27)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>3</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>3</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>4</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00002c92, 0x00005978)</Identifier>
			<Name>Player Controller</Name>
			<AlgorithmClassIdentifier>(0x5f426dce, 0x08456e13)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation name</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_EndOfFile</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0xcc14d8d6, 0xf27ecb73)</TypeIdentifier>
					<Name>Action to perform</Name>
					<DefaultValue>Pause</DefaultValue>
					<Value>Stop</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>96</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>512</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x568d148e, 0x650792b3)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x000673cb)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc73e83ec, 0xf855c5bc)</Identifier>
					<Value>false</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00005836, 0x00007f57)</Identifier>
			<Name>EEG Data File 2 reader</Name>
			<AlgorithmClassIdentifier>(0x6468099f, 0x0370095a)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x403488e7, 0x565d70b6)</TypeIdentifier>
					<Name>Output stream 1</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Output stream 2</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Output stream 3</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue></DefaultValue>
					<Value>$var{EEG File 2}</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x17ee7c08, 0x94c14893)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>-144</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>576</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x30a4e5c9, 0x83502953)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xf37b8e7a, 0x1bc33e4e)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x00171804)</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x0000694c, 0x00005014)</Identifier>
			<Name>EEG data file 1 reader</Name>
			<AlgorithmClassIdentifier>(0x6468099f, 0x0370095a)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x403488e7, 0x565d70b6)</TypeIdentifier>
					<Name>Output stream 1</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Output stream 2</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Output stream 3</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue></DefaultValue>
					<Value>$var{EEG File 1}</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x17ee7c08, 0x94c14893)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>-144</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>352</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x30a4e5c9, 0x83502953)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xf37b8e7a, 0x1bc33e4e)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x001757c3)</Value>
				</Attribute>
			</Attributes>
		</Box>
	</Boxes>
	<Links>
		<Link>
			<Identifier>(0x00000d20, 0x000000b6)</Identifier>
			<Source>
				<BoxIdentifier>(0x00000661, 0x0000493c)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00001fa8, 0x00006669)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x0000183b, 0x00001437)</Identifier>
			<Source>
				<BoxIdentifier>(0x00001fa8, 0x00006669)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00002c92, 0x00005978)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00001d3a, 0x00001319)</Identifier>
			<Source>
				<BoxIdentifier>(0x00001fa8, 0x00006669)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00001881, 0x0000648e)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00001f3e, 0x00002128)</Identifier>
			<Source>
				<BoxIdentifier>(0x0000694c, 0x00005014)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00001fa8, 0x00006669)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00003d79, 0x00000790)</Identifier>
			<Source>
				<BoxIdentifier>(0x0000694c, 0x00005014)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00000661, 0x0000493c)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00004377, 0x00004a5d)</Identifier>
			<Source>
				<BoxIdentifier>(0x00001fa8, 0x00006669)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00001881, 0x0000648e)</BoxIdentifier>
				<BoxInputIndex>2</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00005d5c, 0x00003c88)</Identifier>
			<Source>
				<BoxIdentifier>(0x00005836, 0x00007f57)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00001fa8, 0x00006669)</BoxIdentifier>
				<BoxInputIndex>3</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00006601, 0x0000605f)</Identifier>
			<Source>
				<BoxIdentifier>(0x00005836, 0x00007f57)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00001fa8, 0x00006669)</BoxIdentifier>
				<BoxInputIndex>2</BoxInputIndex>
			</Target>
		</Link>
	</Links>
	<Comments>
		<Comment>
			<Identifier>(0x0000494c, 0x00003563)</Identifier>
			<Text>This Scenario is set for a g.tec cap with 2 amplifier g.USBamp</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>1072</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>-144</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00006a47, 0x0000309a)</Identifier>
			<Text>&lt;b&gt;OVERVIEW&lt;/b&gt;
Change Settings on Scenario Configuration tab : 
Scripts path = folder to the scripts and config files (normally don't need to change that that if you keep the hierarchy)
EEG File 1/2 = link to the file to concatenate
Obvious settings = obvious....

File Format for saved signals : {XP Name}_{Subject ID}_S{Session}__acquisition_concatfile-[{date}-{time}]</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>1056</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>-48</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x00006a47, 0x0000309b)</Identifier>
			<Text>&lt;b&gt;PRESENTATION&lt;/b&gt;
Les options sont modifiables dnas l'onglet Scenario Configuration : 
Scripts path = dossier des scripts et des fichiers de configuration (normalement, il n'est pas nécessaire de changer cela si vous conservez la hiérarchie)
EEG File 1/2 = Lien vers les fichiers à concaténer
Paramètres évidents = évidents.....

Format de fichier pour les signaux enregistrés : {XP Name}_{Subject ID}_S{Session}__acquisition_concatfile-[{date}-{time}]</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>1056</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>96</Value>
				</Attribute>
			</Attributes>
		</Comment>
	</Comments>
	<Metadata>
		<Entry>
			<Identifier>(0x00005b71, 0x00002711)</Identifier>
			<Type>(0x3bcce5d2, 0x43f2d968)</Type>
			<Data>[]</Data>
		</Entry>
	</Metadata>
	<Attributes>
		<Attribute>
			<Identifier>(0x4c90d4ad, 0x7a2554ec)</Identifier>
			<Value>320</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x7b814cca, 0x271df6dd)</Identifier>
			<Value>480</Value>
		</Attribute>
	</Attributes>
</OpenViBE-Scenario>