OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Add Timeout If no train stimulation comes
Comment
  This Scenario is set for a g.tec cap with 2 amplifier g.USBamp
Comment
  OVERVIEW
  Change Settings on Scenario Configuration tab :
  Scripts path = folder to the scripts and config files (normally don't need to change that that if you keep the hierarchy)
  Training EEG File = link to the file for training (previous concatenate file)
  File Suffix = Suffix for script files
Comment
  PRESENTATION
  Les options sont modifiables dnas l'onglet Scenario Configuration :
  Scripts path = dossier des scripts et des fichiers de configuration (normalement, il n'est pas nécessaire de changer cela si vous conservez la hiérarchie)
  Training EEG File = lien vers le fichier d'entrainement (le fichier concaténé précédemment)
  File Suffix = suffixe  pour les fichiers de config
Settings
  Scripts Path = ${Player_ScenarioDirectory}/scripts
  Training EEG File = ${Player_ScenarioDirectory}/signals/training.ov
  XP Name = XP
  Subject ID = C1
  Session = 1
  File Suffix = $var{XP Name}_$var{Subject ID}_S$var{Session}
  Trial Duration = 4
  Trial Offset = 0.5
  Epoch Duration = 1
  Epoch Offset = 0.062500
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
  Number of Features to select = 4

Generic stream reader => #0
  Filename = $var{Training EEG File}
#0.Output stream 2 -> Timeout => #1
  Timeout delay = 10
  Output Stimulation = OVTK_StimulationId_Train
Input stimulations 1=#0.Output stream 3, Input stimulations 2=#1 -> Stimulation multiplexer
-> Identity => #3
-> Identity => #4
#0.Output stream 2 -> Channel Selector "!EOG1;EOG2;EOG3;EMGg;EMGd" => #5
  Channel List = EOG1;EOG2;EOG3;EMGg;EMGd
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter "4-8"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 1
-> Spatial Filter => #7
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-4_8-$var{File Suffix}.xml
#5 -> Temporal filter "8-12"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> Spatial Filter => #9
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-8_12-$var{File Suffix}.xml
#5 -> Temporal filter "12-16"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
-> Spatial Filter => #11
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-12_16-$var{File Suffix}.xml
#5 -> Temporal filter "16-20"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
-> Spatial Filter => #13
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-16_20-$var{File Suffix}.xml
#5 -> Temporal filter "20-24"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 1
-> Spatial Filter => #15
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-20_24-$var{File Suffix}.xml
#5 -> Temporal filter "24-28"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 24
  High cut frequency (Hz) = 28
  Pass band ripple (dB) = 1
-> Spatial Filter => #17
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-24_28-$var{File Suffix}.xml
#5 -> Temporal filter "28-32"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 28
  High cut frequency (Hz) = 32
  Pass band ripple (dB) = 1
-> Spatial Filter => #19
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-28_32-$var{File Suffix}.xml
#5 -> Temporal filter "32-36"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 32
  High cut frequency (Hz) = 36
  Pass band ripple (dB) = 1
-> Spatial Filter => #21
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-32_36-$var{File Suffix}.xml
#5 -> Temporal filter "36-40"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 36
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 1
-> Spatial Filter => #23
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-36_40-$var{File Suffix}.xml
Input 1=#7, Input 2=#9, Input 3=#11, Input 4=#13, Input 5=#15, Input 6=#17, Input 7=#19, Input 8=#21, Input 9=#23 -> Signal Merger => #24
Input signal=#24, Input stimulations=#3 -> Stimulation based epoching "Trials C1"
  Epoch duration (in sec) = $var{Trial Duration}
  Epoch offset (in sec) = $var{Trial Offset}
  Stimulation to epoch from = $var{Class 1}
-> Time based epoching
  Epoch 1 duration (in sec) = $var{Epoch Duration}
  Epoch 1 intervals (in sec) = $var{Epoch Offset}
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)"
  Equation = log(1+x)
-> Feature aggregator => #30
Input signal=#24, Input stimulations=#3 -> Stimulation based epoching "Trials C2"
  Epoch duration (in sec) = $var{Trial Duration}
  Epoch offset (in sec) = $var{Trial Offset}
  Stimulation to epoch from = $var{Class 2}
-> Time based epoching
  Epoch 1 duration (in sec) = $var{Epoch Duration}
  Epoch 1 intervals (in sec) = $var{Epoch Offset}
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)"
  Equation = log(1+x)
-> Feature aggregator => #36
Train-Start Flag=#4, Class 1=#30, Class 2=#36 -> Features Selection Trainer
  Log Level = Information
  Train trigger = OVTK_StimulationId_Train
  Filename to save Feature Selection = $var{Scripts Path}/features-selected-$var{File Suffix}.xml
  Method = mRMR (minimum Redundancy Maximum Relevance)
  Number of features to select = $var{Number of Features to select}
  Discretisation = true
  Threshold = 0.0
  mRMR Method = MID
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
