OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0)
Comment
  This Scenario is set for a g.tec cap with 2 amplifier g.USBamp
Comment
  OVERVIEW
  Change Settings on Scenario Configuration tab :
  Scripts/Signals path = folder to the different files (normally don't need to change that if you keep the hierarchy)
  File Suffix = Suffix for script files
  File Prefix = Prefix for signals files
  Obvious settings = obvious....

  File Format for saved signals :
  {File Prefix}_online-[{date}-{time}]
  {File Prefix}_online_features-[{date}-{time}]
  {File Prefix}_online_classifier_result-[{date}-{time}]
  {File Prefix}_sham-[date}-{time}] (you can enable/disable this save with disable/enable the box)
Comment
  PRESENTATION
  Les options sont modifiables dnas l'onglet Scenario Configuration :
  Scripts/Signals path = dossier des différents fichiers (normalement, il n'est pas nécessaire de changer cela si vous conservez la hiérarchie)
  File Suffix = Suffixe des fichiers de config
  File Prefix = Préfixe des fichiers de signaux
  Paramètres évidents = évidents.....

  Format de fichier pour les signaux enregistrés :
  {File Prefix}_online-[{date}-{time}]
  {File Prefix}_online_features-[{date}-{time}]
  {File Prefix}_online_classifier_result-[{date}-{time}]
  {File Prefix}_sham-[date}-{time}] (vous pouvez activer/désactiver l'enregistrement en activant/désactivant la boite)
Settings
  Scripts Path = ${Player_ScenarioDirectory}/scripts
  Signals Path = ${Player_ScenarioDirectory}/signals
  XP Name = XP
  Subject ID = C1
  Session = 1
  Run = 1
  File Suffix = $var{XP Name}_$var{Subject ID}_S$var{Session}
  File Prefix = $var{XP Name}_$var{Subject ID}_S$var{Session}_R$var{Run}
  Epoch Duration = 1
  Epoch Offset = 0.062500

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename
  New channel names = Channel 1;Channel 2
  0x8d21ff41 = $var{Scripts Path}/channel-list.xml
-> Channel Selector "!EventChannel1;EventChannel2" => #2
  Channel List = EventChannel1;EventChannel2
  Action = Reject
  Channel Matching Method = Smart
-> Channel Selector "!EOG1;EOG2;EOG3;EMGg;EMGd" => #3
  Channel List = EOG1;EOG2;EOG3;EMGg;EMGd
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter "4-8"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 1
-> Spatial Filter => #5
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-4_8-$var{File Suffix}.xml
#3 -> Temporal filter "8-12"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> Spatial Filter => #7
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-8_12-$var{File Suffix}.xml
#3 -> Temporal filter "12-16"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
-> Spatial Filter => #9
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-12_16-$var{File Suffix}.xml
#3 -> Temporal filter "16-20"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
-> Spatial Filter => #11
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-16_20-$var{File Suffix}.xml
#3 -> Temporal filter "20-24"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 1
-> Spatial Filter => #13
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-20_24-$var{File Suffix}.xml
#3 -> Temporal filter "24-28"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 24
  High cut frequency (Hz) = 28
  Pass band ripple (dB) = 1
-> Spatial Filter => #15
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-24_28-$var{File Suffix}.xml
#3 -> Temporal filter "28-32"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 28
  High cut frequency (Hz) = 32
  Pass band ripple (dB) = 1
-> Spatial Filter => #17
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-28_32-$var{File Suffix}.xml
#3 -> Temporal filter "32-36"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 32
  High cut frequency (Hz) = 36
  Pass band ripple (dB) = 1
-> Spatial Filter => #19
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-32_36-$var{File Suffix}.xml
#3 -> Temporal filter "36-40"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 36
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 1
-> Spatial Filter => #21
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = $var{Scripts Path}/fbcsp-spatial-filter-36_40-$var{File Suffix}.xml
Input 1=#5, Input 2=#7, Input 3=#9, Input 4=#11, Input 5=#13, Input 6=#15, Input 7=#17, Input 8=#19, Input 9=#21 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = $var{Epoch Duration}
  Epoch 1 intervals (in sec) = $var{Epoch Offset}
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Simple DSP "log(1+x)"
  Equation = log(1+x)
-> Feature aggregator
-> Features Selector => #28
  Features List = :
  0x8d21ff41 = $var{Scripts Path}/features-selected-$var{File Suffix}.xml
-> Generic stream writer "Feature ov"
  Filename = $var{Signals Path}/$var{File Prefix}_online_features-[$core{date}-$core{time}].ov
  Use compression = false
Features=#28 -> Classifier processor => #30
  Filename to load configuration from = $var{Scripts Path}/classifier.xml
#30.Hyperplane distance -> 0x341d3912 Generic stream writer "Create ShamFB"
  Filename = $var{Signals Path}/$var{XP Name}_sham-[$core{date}-$core{time}].ov
  Use compression = false
#0.Experiment information -> Identity => #32
Input stream 1=#32, Input stream 2=#2 -> Generic stream writer "Raw OV"
  Filename = $var{Signals Path}/$var{File Prefix}_raw-[$core{date}-$core{time}].ov
  Use compression = false
Experiment information=#32, Signal=#2 -> GDF file writer "Raw GDF"
  Filename = $var{Signals Path}/$var{File Prefix}_raw-[$core{date}-$core{time}].gdf
Graz Motor Imagery BCI Stimulator => #35
  Lua Script = $var{Scripts Path}/mi-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 1
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Classifier Result=#30.Labels, Distance=#30.Hyperplane distance, Probability=#30.Probability values, Input stream 4=#35 -> Generic stream writer
  Filename = $var{Signals Path}/$var{File Prefix}_online_classifier_result-[$core{date}-$core{time}].ov
  Use compression = false
Stimulations=#35, Amplitude=#30.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = true
#35 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_BaselineStop
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
#35 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
