OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0-beta)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Matrix Classification Training Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  Input Signal
Comment
  Signal Processing

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 3 -> Identity
-> Identity => #2
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "C3;C4;FC3;FC4"
  Channel List = C3;C4;FC3;FC4
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching => #6
  Epoch duration (in sec) = 1.000000
  Epoch intervals (in sec) = 0.5
Stimulations=#2, Input Signal=#6 -> ASR Trainer
  Filename to save model = ${Player_ScenarioDirectory}/ASR-model.xml
  Train trigger = OVTK_StimulationId_Train
  Metric = Euclidian
  Channel ratio to reconstruct = 1
  Rejection limit = 5
-> Stimulation listener
  Log level to use = Information
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
