OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0-beta)
Settings
  Test Name = Artefact-Amplitude

Time signal
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Simple DSP => #1
  Equation = sin(2*x)
-> Artefact Amplitude => #2
  Max (mV) = 0.9
Data=#2 -> Signal display "After"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1.5
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#1 -> Signal display "Before"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 1.5
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
