OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Thibaut Monseigne
0x8c1fc55b = 1.0
0x9f5c4075 = Matrix Classification Testing Example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  Compute Covariance
Comment
  Classifier processor
  (Need to run previous scenario)
Settings
  Data = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
  Directory = ${Player_ScenarioDirectory}
  Stimulation Class 1 = OVTK_GDF_Left
  Stimulation Class 2 = OVTK_GDF_Right
  Log Level = Information
  Adaptation = No

Generic stream reader => #0
  Filename = $var{Data}
#0.Output stream 3 -> Identity => #1
-> Identity => #2
-> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> LWF => #8
  Estimator = Ledoit and Wolf
  Center Data = true
  Log Level = $var{Log Level}
Expected Label=#1, Input Matrix=#8 -> MDM => #9
  Filename to load classifier model = ${Player_ScenarioDirectory}/Training-MDM.xml
  Filename to save classifier model = ${Player_ScenarioDirectory}/output-classifier.xml
  Adaptation = $var{Adaptation}
  Log Level = Information
Stimulations=#2, Amplitude=#9.Distance -> Graz MDM
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = true
  Predictions to integrate = 5
  Positive feedback only = false
Input Matrix=#8 -> MDM Rebias => #11
  Filename to load classifier model = ${Player_ScenarioDirectory}/Training-MDM-Rebias.xml
  Filename to save classifier model = ${Player_ScenarioDirectory}/output-classifier.xml
  Adaptation = $var{Adaptation}
  Log Level = Information
Stimulations=#2, Amplitude=#11.Distance -> Graz MDM Rebias
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = true
  Predictions to integrate = 5
  Positive feedback only = false
Input Matrix=#8 -> FgMDMRT => #13
  Filename to load classifier model = ${Player_ScenarioDirectory}/Training-FgMDMRT.xml
  Filename to save classifier model = ${Player_ScenarioDirectory}/output-classifier.xml
  Adaptation = $var{Adaptation}
  Log Level = Information
Stimulations=#2, Amplitude=#13.Distance -> Graz FgMDMRT
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = true
  Predictions to integrate = 5
  Positive feedback only = false
